CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['output of ilastik pipline -- autocontext_J004_B1.ilp']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "prob_maps")
    Name to assign these images:larvae_maps
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory doesnot contain "prob_maps")
    Name to assign these images:orig_images
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:larvae_maps
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:red_map
    Convert green to gray?:Yes
    Name the output image:green_map
    Convert blue to gray?:Yes
    Name the output image:blue_map
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:red_map
    Name the primary objects to be identified:shells
    Typical diameter of objects, in pixel units (Min,Max):600,800
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:150
    Suppress local maxima that are closer than this minimum allowed distance:110
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:shells
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:shells
    Name the output objects:filtered_shells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.2
    Filter using a maximum measurement value?:Yes
    Maximum value:0.75

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:filtered_shells
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:orig_images
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:filtered_shells

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:orig_images
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:overlay
    Saved file format:png
    Output file location:Default Output Folder|./overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|./measurements
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:filtered_shells|Number_Object_Number,filtered_shells|Location_Center_Y,filtered_shells|Location_Center_X,filtered_shells|Location_Center_Z,filtered_shells|Parent_shells,filtered_shells|AreaShape_Perimeter,filtered_shells|AreaShape_FormFactor,filtered_shells|AreaShape_Center_Y,filtered_shells|AreaShape_Center_X,filtered_shells|AreaShape_Center_Z,filtered_shells|AreaShape_Area,filtered_shells|AreaShape_MinFeretDiameter,filtered_shells|AreaShape_Solidity,filtered_shells|AreaShape_MaxFeretDiameter,filtered_shells|AreaShape_EulerNumber,filtered_shells|AreaShape_Eccentricity,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:measurements_
    Overwrite existing files without warning?:No
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