CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['output of ilastik pipline — autocontext_J004_B1.ilp']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:oyster_eggs
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedEggImage
    Image or measurement?:Image
    Select the first image:oyster_eggs
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:InvertedEggImage
    Name the primary objects to be identified:eggs
    Typical diameter of objects, in pixel units (Min,Max):100,700
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:150
    Suppress local maxima that are closer than this minimum allowed distance:110
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:1.0
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:eggs
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|./measurements
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:eggs|Location_Center_Y,eggs|Location_Center_X,eggs|Location_Center_Z,eggs|Number_Object_Number,eggs|AreaShape_Perimeter,eggs|AreaShape_FormFactor,eggs|AreaShape_MeanRadius,eggs|AreaShape_Orientation,eggs|AreaShape_MaxFeretDiameter,eggs|AreaShape_MinFeretDiameter,eggs|AreaShape_Area,eggs|AreaShape_Solidity,eggs|AreaShape_EulerNumber,eggs|AreaShape_MedianRadius,eggs|AreaShape_Compactness,eggs|AreaShape_Extent,eggs|AreaShape_Eccentricity,eggs|AreaShape_MaximumRadius,eggs|AreaShape_MinorAxisLength,eggs|AreaShape_MajorAxisLength,eggs|AreaShape_Center_Y,eggs|AreaShape_Center_X,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:measurements_
    Overwrite existing files without warning?:No
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