CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:314
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:origLarvae
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['convert orginal image to grayscale by split, the green channel grayscale image will be used in the rest of the analysis']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
    Select the input image:origLarvae
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ImageMath:[module_num:6|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notes:['Invert the image so larvae is bright and background is dark']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:invertedLarvae
    Image or measurement?:Image
    Select the first image:OrigGreen
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Smooth:[module_num:7|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notes:['']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
    Select the input image:invertedLarvae
    Name the output image:smoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:8.0
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
IdentifyPrimaryObjects:[module_num:8|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notes:['find the oyster larvae tissue. Threshold correction factor of 2.25 helps distinguish the larvae from background and other objects']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
    Select the input image:smoothed
    Name the primary objects to be identified:tissue
    Typical diameter of objects, in pixel units (Min,Max):150,450
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:2.25
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:9|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notes:['measure the tissue objects returned by measure primary objects']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
    Select objects to measure:tissue
    Calculate the Zernike features?:No

FilterObjects:[module_num:10|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notes:["filter out objects that don't match what we expect an oyster larvae to look like. Uses measurements from last module to filter based on eccentricity, solidity, and formfactor."]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
    Select the objects to filter:tissue
    Name the output objects:FilterTissue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.2
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.85
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.75

IdentifySecondaryObjects:[module_num:11|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notes:['propagate from the tissue objects identified to get a new object that includes the lighter shells surrounding the tissue']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
    Select the input objects:FilterTissue
    Name the objects to be identified:shells
    Select the method to identify the secondary objects:Propagation
    Select the input image:smoothed
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:12|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notes:['measure the shell objects identified']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
    Select objects to measure:shells
    Calculate the Zernike features?:No

FilterObjects:[module_num:13|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notes:['filter out large shell objects. If the shell is obscured sometimes id secondary objects picks up large swathes of the background instead of the shells']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
    Select the objects to filter:shells
    Name the output objects:FilterShells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:75000.0

OverlayOutlines:[module_num:14|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notes:['draw outlines of cells that passed the filter']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:origLarvae
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:FilterTissue
    Select outline color:#F0FF62
    Select objects to display:FilterShells

SaveImages:[module_num:15|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notes:['save in results sub-folder']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:origLarvae
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|results
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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